PsychoPy2experiment version="2023.2.2"
Settings
  Experiment info = {'participant': '', 'run': '001'}
  Full-screen window = True
  Monitor = mri_monitor
  Screen = 1
  Units = height
  Use version = 2023.1.0
  Window size (pixels) = [1512, 982]
  color = $[1,1,1]
  expName = Gen_Run1_Tone
  keyboardBackend = ioHub
  logging level = data
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Routines
  Routine Trigger
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    ImageComponent trigger_image
      image = img/runstart.png
      size = (.75, 0.7)
      startVal [time (s)] = 0.0
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    KeyboardComponent trigger_resp
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Wait
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    TextComponent wait
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        The game will start in 5 seconds.


        Remember to hold still in the scanner...
  Routine Completion
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    TextComponent completion_prompt
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        You are finished with this scan!

        Please press 1 to end.
    KeyboardComponent completion_prompt_resp
      allowedKeys = 'a'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      store = first key
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  Routine ISI_outcome
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    TextComponent isi_outcome
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine firststim_feedback
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # check if a key was pressed:
        if firststim_resp.keys: # if the list contains at least one entry,
            continueRoutine = False # don't show this feedback routine
    TextComponent fdbk
      color = black
      letterHeight = .05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        Remember:
        Press “1” if you think you will win
        Press “2” if you think you will lose
  Routine Labjack
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    CodeComponent code_lbjk
      Code Type = Auto->JS
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      Begin Experiment:
        #import psychopy labjack library
        from psychopy.hardware.labjacks import U3

        #initialize Labjack
        lj = U3()

        #Get calibration info and turn FIO 0 to off (usually starts as ON)
        cal_data = lj.getCalibrationData()

        for x in range(0,7):
            lj.setFIOState(x,0) #Make sure we start with the trigger off
  Routine ISI_stim_loop2
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    TextComponent isi_stim_loop2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $current_isi_2
      text = +
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    CodeComponent isi_stim_code_loop2
      Code Type = Auto->JS
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      Begin Routine:
        import random as rand

        jitter_isi_2 = rand.choices([0.5, 0.5, 0.5, 1.0, 1.0, 1.5, 2.0, 2.5], k=54) # create the list

        if loop2.thisN == 0: # only on the first trial
            shuffle(jitter_isi_2) # randomise its order

        current_isi_2 = jitter_isi_2.pop() # extract one entry on each trial
        thisExp.addData('isi_stim_2', current_isi_2) # record in the data for this trial
  Routine jitter_ITI_loop2
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    TextComponent iti_loop2
      color = black
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $current_jitter_2
      text = +
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    CodeComponent iti_code_loop2
      Code Type = Auto->JS
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      Begin Routine:
        import random as rand

        jitter_iti_2 = rand.choices([.5, 1.0, 1.5, 2.0], k=54) # create the list

        if loop2.thisN == 0: # only on the first trial
            shuffle(jitter_iti_2) # randomise its order

        current_jitter_2 = jitter_iti_2.pop() # extract one entry on each trial

        thisExp.addData('jitter_iti_2', current_jitter_2) # record in the data for this trial
  Routine jitter_ITI_loop1
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    TextComponent iti_loop1
      color = black
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $current_jitter_1
      text = +
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    CodeComponent iti_code_loop1
      Code Type = Auto->JS
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      Begin Routine:
        import random as rand

        jitter_iti_1 = rand.choices([.5, 1.0, 1.5, 2.0], k=54) # create the list

        if loop1.thisN == 0: # only on the first trial
            shuffle(jitter_iti_1) # randomise its order

        current_jitter_1 = jitter_iti_1.pop() # extract one entry on each trial

        thisExp.addData('jitter_iti_1', current_jitter_1) # record in the data for this trial
  Routine ISI_stim_loop1
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    TextComponent isi_stim_loop1
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $current_isi_1
      text = +
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    CodeComponent isi_stim_code_loop1
      Code Type = Auto->JS
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      Begin Routine:
        import random as rand

        jitter_isi_1 = rand.choices([0.5, 0.5, 0.5, 1.0, 1.0, 1.5, 2.0, 2.5], k=54) # create the list


        if loop1.thisN == 0: # only on the first trial
            shuffle(jitter_isi_1) # randomise its order

        current_isi_1 = jitter_isi_1.pop() # extract one entry on each trial
        thisExp.addData('isi_stim_1', current_isi_1) # record in the data for this trial
  Routine ISI_stim_loop3
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    TextComponent isi_stim_loop3
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $current_isi_3
      text = +
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    CodeComponent isi_stim_code_loop3
      Code Type = Auto->JS
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      Begin Routine:
        import random as rand

        jitter_isi_3 = rand.choices([0.5, 0.5, 0.5, 1.0, 1.0, 1.5, 2.0, 2.5], k=54) # create the list


        if loop3.thisN == 0: # only on the first trial
            shuffle(jitter_isi_3) # randomise its order

        current_isi_3 = jitter_isi_3.pop() # extract one entry on each trial
        thisExp.addData('isi_stim_3', current_isi_3) # record in the data for this trial
  Routine jitter_ITI_loop3
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    TextComponent iti_loop3
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $current_jitter_3
      text = +
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    CodeComponent iti_code_loop3
      Code Type = Auto->JS
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      Begin Routine:
        import random as rand

        jitter_iti_3 = rand.choices([.5, 1.0, 1.5, 2.0], k=54) # create the list

        if loop3.thisN == 0: # only on the first trial
            shuffle(jitter_iti_3) # randomise its order

        current_jitter_3 = jitter_iti_3.pop() # extract one entry on each trial

        thisExp.addData('jitter_iti_3', current_jitter_3) # record in the data for this trial
  Routine firststim_loop1
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    ImageComponent firststim_img_loop1
      image [set every repeat] = $FirstStimL
      size = (0.75, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine outcome_loop1
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    ImageComponent outcome_img_loop1
      image [set every repeat] = $OutcomeL
      size = (0.75, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    SoundComponent Tone_loop1
      sound [set every repeat] = $ToneL
      startVal [time (s)] = .2
      stopVal [duration (s)] = 1.3
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  Routine firststim_loop2
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    ImageComponent firststim_img_loop2
      image [set every repeat] = $FirstStimA
      size = (0.75, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine secondstim_loop2
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    ImageComponent secondstim_img_loop2
      image [set every repeat] = $SecondStimA
      size = (0.75, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine outcome_loop2
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    ImageComponent outcome_image_loop2
      image [set every repeat] = $OutcomeA
      size = (0.75, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    SoundComponent Tone_loop2
      sound [set every repeat] = $ToneA
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.3
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  Routine firststim_loop3
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    ImageComponent firststim_img_loop3
      image [set every repeat] = $FirstStimH
      size = (0.75, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine outcome_loop3
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    ImageComponent outcome_img_loop3
      image [set every repeat] = $OutcomeH
      size = (0.75, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    SoundComponent Tone_loop3
      sound [set every repeat] = $ToneH
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.3
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  Routine secondstim_loop3
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    ImageComponent secondstim_img_loop3
      image [set every repeat] = $SecondStimH
      size = (0.75, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine Block_L
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    TextComponent Block_L_ITI
      color = black
      letterHeight = .3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = +
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    ImageComponent Block_L_Context
      image = img/context_lion.png
      size = (0.75, 0.7)
      startVal [time (s)] = .5
      stopVal [duration (s)] = 5.0
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    ImageComponent Block_L_Confidence
      image = img/confidence.png
      size = (0.7, 0.7)
      startVal [time (s)] = 5.5
      stopVal [duration (s)] = 7
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    KeyboardComponent Block_L_Confidence_Resp
      allowedKeys = 'a','b','c','d', 'A', 'B', 'C', 'D'
      forceEndRoutine = True
      startVal [time (s)] = 5.5
      stopVal [duration (s)] = 7
      store = all keys
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  Routine secondstim_loop1
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    ImageComponent secondstim_img_loop1
      image [set every repeat] = $SecondStimL
      size = (0.75, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Block_H
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    TextComponent Block_H_ITI
      color = black
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = +
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    ImageComponent Block_H_Context
      image = img/context_hyena.png
      size = (0.7, 0.7)
      startVal [time (s)] = .5
      stopVal [duration (s)] = 5.0
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    ImageComponent Block_H_Confidence
      image = img/confidence.png
      size = (0.7, 0.7)
      startVal [time (s)] = 5.5
      stopVal [duration (s)] = 5
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    KeyboardComponent Block_H_Resp
      allowedKeys = 'a','b','c','d', 'A', 'B', 'C', 'D'
      forceEndRoutine = True
      startVal [time (s)] = 5.5
      stopVal [duration (s)] = 5
      store = all keys
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  Routine Block_A
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    TextComponent Block_A_ITI
      color = black
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = +
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    ImageComponent Block_A_Context
      image = img/context_antelope.png
      size = (0.7, 0.7)
      startVal [time (s)] = .5
      stopVal [duration (s)] = 5.0
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    ImageComponent Block_A_Confidence
      image = img/confidence.png
      size = (0.7, 0.7)
      startVal [time (s)] = 5.5
      stopVal [duration (s)] = 5
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    KeyboardComponent Block_A_Resp
      allowedKeys = 'a','b','c','d', 'A', 'B', 'C', 'D'
      forceEndRoutine = True
      startVal [time (s)] = 5.5
      stopVal [duration (s)] = 5
      store = all keys
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  Routine ISI_conf_stim1_loop1
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    TextComponent isi_conf_stim1_loop1
      color = black
      letterHeight = .1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .25
      text = +
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  Routine ISI_conf_stim2_loop1
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    TextComponent isi_conf_stim2_loop1
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .25
      text = +
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  Routine conf_stim2_loop1
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    ImageComponent conf_img_stim2_loop1
      image [set every repeat] = $ConfidenceL
      size = (0.72, 0.7)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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    KeyboardComponent conf_resp_stim2_loop1
      allowedKeys = 'a','b','c','d', 'A', 'B', 'C', 'D'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
      store = all keys
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  Routine conf_stim1_loop1
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    ImageComponent conf_img_stim1_loop1
      image [set every repeat] = $ConfidenceL
      size = (0.72, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    KeyboardComponent conf_resp_stim1_loop1
      allowedKeys [set every repeat] = 'a','b','c','d','A', 'B', 'C', 'D'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      store = all keys
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  Routine ISI_conf_stim1_loop2
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    TextComponent isi_conf_stim1_loop2
      color = black
      letterHeight = .1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .25
      text = +
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  Routine ISI_conf_stim2_loop2
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    TextComponent isi_conf_loop2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .25
      text = +
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  Routine conf_stim2_loop2
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    ImageComponent conf_img_stim2_loop2
      image [set every repeat] = $ConfidenceA
      size = (0.72, 0.7)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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    KeyboardComponent conf_resp_stim2_loop2
      allowedKeys = 'a','b','c','d', 'A', 'B', 'C', 'D'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
      store = all keys
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  Routine conf_stim1_loop2
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    ImageComponent conf_img_stim1_loop2
      image [set every repeat] = $ConfidenceA
      size = (0.72, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    KeyboardComponent conf_resp_stim1_loop2
      allowedKeys = 'a', 'b', 'c', 'd', 'A', 'B', 'C', 'D'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      store = all keys
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  Routine conf_stim2_loop3
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    ImageComponent conf_img_stim2_loop3
      image [set every repeat] = $ConfidenceH
      size = (0.72, 0.7)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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    KeyboardComponent conf_resp_stim2_loop3
      allowedKeys = 'a','b','c','d', 'A', 'B', 'C', 'D'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
      store = all keys
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  Routine ISI_conf_stim2_loop3
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    TextComponent isi_conf_stim2_loop3
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .25
      text = +
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  Routine conf_feedback_stim2_loop1
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    TextComponent fdbk_stim2_loop1
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Remember:
        Give your confidence rating
        ‘1’ = not very confident
        ‘8’ = very confident
    CodeComponent code_stim2_loop1
      Code Type = Auto->JS
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      Begin Routine:
        # check if a key was pressed:
        if conf_resp_stim2_loop1.keys: # if the list contains at least one entry,
            continueRoutine = False # don't show this feedback routine
  Routine conf_feedback_stim1_loop1
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    TextComponent fdbk_stim1_loop1
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Remember:
        Give your confidence rating
        ‘1’ = not very confident
        ‘8’ = very confident
    CodeComponent code_stim1_loop1
      Code Type = Auto->JS
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      Begin Routine:
        # check if a key was pressed:
        if conf_resp_stim1_loop1.keys: # if the list contains at least one entry,
            continueRoutine = False # don't show this feedback routine
  Routine conf_feedback_stim2_loop2
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    TextComponent fdbk_stim2_loop2
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Remember:
        Give your confidence rating
        ‘1’ = not very confident
        ‘8’ = very confident
    CodeComponent code_stim2_loop2
      Code Type = Auto->JS
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      Begin Routine:
        # check if a key was pressed:
        if conf_resp_stim2_loop2.keys: # if the list contains at least one entry,
            continueRoutine = False # don't show this feedback routine
  Routine conf_feedback_stim1_loop2
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    TextComponent fdbk_stim1_loop2
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Remember:
        Give your confidence rating
        ‘1’ = not very confident
        ‘8’ = very confident
    CodeComponent code_stim1_loop2
      Code Type = Auto->JS
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      Begin Routine:
        # check if a key was pressed:
        if conf_resp_stim2_loop2.keys: # if the list contains at least one entry,
            continueRoutine = False # don't show this feedback routine
  Routine conf_feedback_stim2_loop3
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  Routine conf_stim1_loop3
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    ImageComponent conf_img_stim1_loop3
      image [set every repeat] = $ConfidenceH
      size = (0.72, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    KeyboardComponent conf_resp_stim1_loop3
      allowedKeys = 'a','b','c','d', 'A', 'B', 'C', 'D'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      store = all keys
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  Routine ISI_conf_stim1_loop3
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    TextComponent isi_conf_stim1_loop3
      color = black
      letterHeight = .1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .25
      text = +
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  Routine conf_feedback_stim1_loop3
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Flow
  Routine Trigger
  Routine Wait
  LoopInitiator FullLoop loopType="TrialHandler"
    loopType = random
    nReps = 1
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    LoopInitiator loopL loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 1
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      Routine Block_L
      LoopInitiator loop1 loopType="TrialHandler"
        conditionsFile = Battles_Run1_L.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'RunNumL': 1, 'SetNumL': 1, 'BattleNumL': 3, 'FirstStimL': 'img/Agent_LS.png', 'SecondStimL': 'img/HS.png', 'ConfidenceL': 'img/confidence.png', 'OutcomeL': 'img/lost.png', 'OutcomeNumL': 0, 'ToneL': 'img/WhiteNoiseLong.wav'},
          {'RunNumL': 1, 'SetNumL': 1, 'BattleNumL': 10, 'FirstStimL': 'img/Agent_LM.png', 'SecondStimL': 'img/LS.png', 'ConfidenceL': 'img/confidence.png', 'OutcomeL': 'img/lost.png', 'OutcomeNumL': 0, 'ToneL': 'img/WhiteNoiseLong.wav'},
          {'RunNumL': 1, 'SetNumL': 1, 'BattleNumL': 12, 'FirstStimL': 'img/Agent_LM.png', 'SecondStimL': 'img/LW.png', 'ConfidenceL': 'img/confidence.png', 'OutcomeL': 'img/lost.png', 'OutcomeNumL': 0, 'ToneL': 'img/WhiteNoiseLong.wav'},
          {'RunNumL': 1, 'SetNumL': 1, 'BattleNumL': 14, 'FirstStimL': 'img/Agent_LM.png', 'SecondStimL': 'img/HM.png', 'ConfidenceL': 'img/confidence.png', 'OutcomeL': 'img/lost.png', 'OutcomeNumL': 0, 'ToneL': 'img/WhiteNoiseLong.wav'},
          {'RunNumL': 1, 'SetNumL': 1, 'BattleNumL': 20, 'FirstStimL': 'img/Agent_LW.png', 'SecondStimL': 'img/LS.png', 'ConfidenceL': 'img/confidence.png', 'OutcomeL': 'img/lost.png', 'OutcomeNumL': 0, 'ToneL': 'img/WhiteNoiseLong.wav'},
          {'RunNumL': 1, 'SetNumL': 1, 'BattleNumL': 21, 'FirstStimL': 'img/Agent_LW.png', 'SecondStimL': 'img/LM.png', 'ConfidenceL': 'img/confidence.png', 'OutcomeL': 'img/lost.png', 'OutcomeNumL': 0, 'ToneL': 'img/WhiteNoiseLong.wav'}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
        Routine firststim_loop1
        Routine ISI_conf_stim1_loop1
        Routine conf_stim1_loop1
        Routine ISI_stim_loop1
        Routine secondstim_loop1
        Routine ISI_conf_stim2_loop1
        Routine conf_stim2_loop1
        Routine ISI_outcome
        Routine outcome_loop1
        Routine jitter_ITI_loop1
      LoopTerminator loop1
    LoopTerminator loopL
    LoopInitiator loopA loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 1
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      Routine Block_A
      LoopInitiator loop2 loopType="TrialHandler"
        conditionsFile = Battles_Run1_A.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'RunNumA': 1, 'SetNumA': 1, 'BattleNumA': 60, 'FirstStimA': 'img/Agent_AS.png', 'SecondStimA': 'img/LS.png', 'ConfidenceA': 'img/confidence.png', 'OutcomeA': 'img/lost.png', 'OutcomeNumA': 0, 'ToneA': 'img/WhiteNoiseLong.wav'},
          {'RunNumA': 1, 'SetNumA': 1, 'BattleNumA': 61, 'FirstStimA': 'img/Agent_AS.png', 'SecondStimA': 'img/LM.png', 'ConfidenceA': 'img/confidence.png', 'OutcomeA': 'img/lost.png', 'OutcomeNumA': 0, 'ToneA': 'img/WhiteNoiseLong.wav'},
          {'RunNumA': 1, 'SetNumA': 1, 'BattleNumA': 62, 'FirstStimA': 'img/Agent_AS.png', 'SecondStimA': 'img/LW.png', 'ConfidenceA': 'img/confidence.png', 'OutcomeA': 'img/lost.png', 'OutcomeNumA': 0, 'ToneA': 'img/WhiteNoiseLong.wav'},
          {'RunNumA': 1, 'SetNumA': 1, 'BattleNumA': 63, 'FirstStimA': 'img/Agent_AS.png', 'SecondStimA': 'img/HS.png', 'ConfidenceA': 'img/confidence.png', 'OutcomeA': 'img/lost.png', 'OutcomeNumA': 0, 'ToneA': 'img/WhiteNoiseLong.wav'},
          {'RunNumA': 1, 'SetNumA': 1, 'BattleNumA': 65, 'FirstStimA': 'img/Agent_AS.png', 'SecondStimA': 'img/HW.png', 'ConfidenceA': 'img/confidence.png', 'OutcomeA': 'img/lost.png', 'OutcomeNumA': 0, 'ToneA': 'img/WhiteNoiseLong.wav'},
          {'RunNumA': 1, 'SetNumA': 1, 'BattleNumA': 67, 'FirstStimA': 'img/Agent_AS.png', 'SecondStimA': 'img/AM.png', 'ConfidenceA': 'img/confidence.png', 'OutcomeA': 'img/lost.png', 'OutcomeNumA': 0, 'ToneA': 'img/WhiteNoiseLong.wav'}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
        Routine firststim_loop2
        Routine ISI_conf_stim1_loop2
        Routine conf_stim1_loop2
        Routine ISI_stim_loop2
        Routine secondstim_loop2
        Routine ISI_conf_stim2_loop2
        Routine conf_stim2_loop2
        Routine ISI_outcome
        Routine outcome_loop2
        Routine jitter_ITI_loop2
      LoopTerminator loop2
    LoopTerminator loopA
    LoopInitiator loopH loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 1
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      Routine Block_H
      LoopInitiator loop3 loopType="TrialHandler"
        conditionsFile = Battles_Run1_H.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'RunNumH': 1, 'SetNumH': 1, 'BattleNumH': 30, 'FirstStimH': 'img/Agent_HS.png', 'SecondStimH': 'img/LS.png', 'ConfidenceH': 'img/confidence.png', 'OutcomeH': 'img/lost.png', 'OutcomeNumH': 0, 'ToneH': 'img/WhiteNoiseLong.wav'},
          {'RunNumH': 1, 'SetNumH': 1, 'BattleNumH': 31, 'FirstStimH': 'img/Agent_HS.png', 'SecondStimH': 'img/LM.png', 'ConfidenceH': 'img/confidence.png', 'OutcomeH': 'img/lost.png', 'OutcomeNumH': 0, 'ToneH': 'img/WhiteNoiseLong.wav'},
          {'RunNumH': 1, 'SetNumH': 1, 'BattleNumH': 33, 'FirstStimH': 'img/Agent_HS.png', 'SecondStimH': 'img/HS.png', 'ConfidenceH': 'img/confidence.png', 'OutcomeH': 'img/lost.png', 'OutcomeNumH': 0, 'ToneH': 'img/WhiteNoiseLong.wav'},
          {'RunNumH': 1, 'SetNumH': 1, 'BattleNumH': 40, 'FirstStimH': 'img/Agent_HM.png', 'SecondStimH': 'img/LS.png', 'ConfidenceH': 'img/confidence.png', 'OutcomeH': 'img/lost.png', 'OutcomeNumH': 0, 'ToneH': 'img/WhiteNoiseLong.wav'},
          {'RunNumH': 1, 'SetNumH': 1, 'BattleNumH': 41, 'FirstStimH': 'img/Agent_HM.png', 'SecondStimH': 'img/LM.png', 'ConfidenceH': 'img/confidence.png', 'OutcomeH': 'img/lost.png', 'OutcomeNumH': 0, 'ToneH': 'img/WhiteNoiseLong.wav'},
          {'RunNumH': 1, 'SetNumH': 1, 'BattleNumH': 43, 'FirstStimH': 'img/Agent_HM.png', 'SecondStimH': 'img/HS.png', 'ConfidenceH': 'img/confidence.png', 'OutcomeH': 'img/lost.png', 'OutcomeNumH': 0, 'ToneH': 'img/WhiteNoiseLong.wav'}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
        Routine firststim_loop3
        Routine ISI_conf_stim1_loop3
        Routine conf_stim1_loop3
        Routine ISI_stim_loop3
        Routine secondstim_loop3
        Routine ISI_conf_stim2_loop3
        Routine conf_stim2_loop3
        Routine ISI_outcome
        Routine outcome_loop3
        Routine jitter_ITI_loop3
      LoopTerminator loop3
    LoopTerminator loopH
  LoopTerminator FullLoop
  Routine Completion
